PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '', 'age': '', 'sex': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['card_choice.png', 'card_selected.png', 'GainLosConds.xlsx', 'GainLosConds_testforshortexp.xlsx']
  Save excel file = True
  Screen = 1
  Units = height
  Use version = 2022.2.4
  Window size (pixels) = [1920, 1080]
  color = white
  expName = IOWA_Gambling_Task
  keyboardBackend = PsychToolbox
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Routines
  Routine End
    TextComponent thank_you
      color = black
      letterHeight = 0.04
      pos = (0, 0-.15)
      startVal [time (s)] = 0.0
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      text:
        This is the end of the experiment.
        Thank you for your time.

        Press spacebar to close.
    TextComponent Bank_text_2
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Your Final Total: ' + '€' + str(Bank)
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Choice
    CodeComponent ChoiceTime_code
      Code Type = Auto->JS
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      Begin Routine:
        ChoiceStartTime = globalClock.getTime()
        ChoiceTimePassed = 0
        ChoiceTimedOut = 0
        CardChoice = 0
        CurrentCard = ''
        Outcome = 0;

        imgA = 'card_choice.png'
        imgB = 'card_choice.png'
        imgC = 'card_choice.png'
        imgD = 'card_choice.png'
      Each Frame:
        ChoiceTimePassed = (globalClock.getTime() - ChoiceStartTime)
        choiceStr = 'XXXXXX'
      End Routine:
        if(ChoiceResp.keys == '1'):
            CurrentCard = 'A_Card'
        elif(ChoiceResp.keys == '2'):
            CurrentCard = 'B_Card'
        elif(ChoiceResp.keys == '3'):
            CurrentCard = 'C_Card'
        elif(ChoiceResp.keys == '4'):
            CurrentCard = 'D_Card'
    KeyboardComponent ChoiceResp
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent A
      image [set every repeat] = $imgA
      pos [set every repeat] = (-.36, .1)
      saveStartStop = False
      size [set every repeat] = .3
      startVal [time (s)] = 0.0
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    ImageComponent B
      image [set every repeat] = $imgB
      pos [set every repeat] = (-.12, .1)
      saveStartStop = False
      size [set every repeat] = .3
      startVal [time (s)] = 0.0
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    ImageComponent C
      image [set every repeat] = $imgC
      pos [set every repeat] = (.12, .1)
      saveStartStop = False
      size [set every repeat] = .3
      startVal [time (s)] = 0.0
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    ImageComponent D
      image [set every repeat] = $imgD
      pos [set every repeat] = (.36, .1)
      saveStartStop = False
      size [set every repeat] = .3
      startVal [time (s)] = 0.0
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    TextComponent text
      color = black
      letterHeight = 0.05
      pos = (-.36, .3)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent text_2
      color = black
      letterHeight = 0.05
      pos = (-.12, .3)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent text_3
      color = black
      letterHeight = 0.05
      pos = (.12, .3)
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent text_4
      color = black
      letterHeight = 0.05
      pos = (.36, .3)
      startVal [time (s)] = 0.0
      text = 4
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    TextComponent text_6
      color = black
      letterHeight = 0.05
      pos [set every frame] = (0,-.25)
      startVal [time (s)] = 0.0
      text [set every frame] = SELECT A CARD
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  Routine ProcessChoice
    CodeComponent ProcessChoice_code
      Code Type = Auto->JS
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      Begin Routine:
        if(ChoiceResp.keys == '1'):
            A_Counter = A_Counter + 1
            A_moneyCounter = (A_Counter - 1)
            A_Counter = A_Counter + 1
            GoodDeck = 0
            CardAcc = 0
            Outcome = A_Outcome
            print(Outcome)
        elif(ChoiceResp.keys == '2'):
            B_Counter = B_Counter + 1
            B_moneyCounter = (B_Counter - 1)
            GoodDeck = 0
            CardAcc = 0
            Outcome = B_Outcome
        elif(ChoiceResp.keys == '3'):
            C_Counter = C_Counter + 1
            C_moneyCounter = (C_Counter - 1)
            GoodDeck = 1
            CardAcc = 1
            Outcome = C_Outcome
        elif(ChoiceResp.keys == '4'):
            D_Counter = D_Counter + 1
            D_moneyCounter = (D_Counter - 1)
            GoodDeck = 1
            CardAcc = 1
            Outcome = D_Outcome
      End Routine:
        print(Outcome)
        print(type(Bank))
        print(type(Outcome))
        Bank = Bank + Outcome
  Routine Feedback
    CodeComponent CardCounter_code
      Code Type = Auto->JS
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      Begin Routine:
        if(ChoiceResp.keys == '1'):
            CurrentCard = 'A_Card'
            choiceStr = '1'
            imgA = 'card_selected.png'
            imgB = 'card_choice.png'
            imgC = 'card_choice.png'
            imgD = 'card_choice.png'
        elif(ChoiceResp.keys == '2'):
            CurrentCard = 'B_Card'
            choiceStr = '2'
            imgB = 'card_selected.png'
            imgA = 'card_choice.png'
            imgC = 'card_choice.png'
            imgD = 'card_choice.png'
        elif(ChoiceResp.keys == '3'):
            imgC = 'card_selected.png'
            choiceStr = '3'
            imgB = 'card_choice.png'
            imgA = 'card_choice.png'
            imgD = 'card_choice.png'
            CurrentCard = 'C_Card'
        elif(ChoiceResp.keys == '4'):
            CurrentCard = 'D_Card'
            imgD = 'card_selected.png'
            choiceStr = '4'
            imgB = 'card_choice.png'
            imgC = 'card_choice.png'
            imgA = 'card_choice.png'
      End Routine:
        CardCounter = CardCounter + 1
        ChoiceBlock.addData('Chosen_Card', CurrentCard)
        ChoiceBlock.addData('GoodDeck?', GoodDeck)
        ChoiceBlock.addData('GainsLosses', Outcome)
        ChoiceBlock.addData('TotalinBank', Bank)
    ImageComponent A2
      image [set every repeat] = $imgA
      pos [set every repeat] = (-.36, .1)
      saveStartStop = False
      size [set every repeat] = .3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent B2
      image [set every repeat] = $imgB
      pos [set every repeat] = (-.12, .1)
      saveStartStop = False
      size [set every repeat] = .3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent C2
      image [set every repeat] = $imgC
      pos [set every repeat] = (.12, .1)
      saveStartStop = False
      size [set every repeat] = .3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent D2
      image [set every repeat] = $imgD
      pos [set every repeat] = (.36, .1)
      saveStartStop = False
      size [set every repeat] = .3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent DisplayCurrentMoney_1
      color [set every repeat] = $MsgColor
      letterHeight = 0.05
      pos = [0,-.2]
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $''+ str(PlusMinus) + str(DisplayMoney)
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    TextComponent Message
      color = black
      letterHeight = 0.05
      pos = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $str(Msg) 
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    TextComponent Bank_text
      color = black
      letterHeight = 0.05
      pos = (0, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $'Your Current Total: ' + '€' + str(Bank)
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    TextComponent text_9
      color = black
      letterHeight = 0.05
      pos = (.36, .3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = 4
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    TextComponent text_5
      color = black
      letterHeight = 0.05
      pos = (-.36, .3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = 1
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    TextComponent text_8
      color = black
      letterHeight = 0.05
      pos = (.12, .3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = 3
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    TextComponent text_7
      color = black
      letterHeight = 0.05
      pos = (-.12, .3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = 2
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  Routine SetMoney
    CodeComponent SetCurrentMoney
      Code Type = Auto->JS
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      End Routine:
        if (Outcome > 0):
            PlusMinus = ('+ €')
            MsgColor = 'green'
            Msg = 'YOU WON!!!'
            DisplayMoney=abs(Outcome)
        elif (Outcome < 0):
            MsgColor = 'red'
            PlusMinus = ('- €')
            Msg = 'YOU LOSE!!!'
            DisplayMoney=abs(Outcome)
  Routine Knowledge
    ImageComponent A3
      image [set every repeat] = $A_Know
      pos [set every repeat] = (-.36, .1)
      saveStartStop = False
      size [set every repeat] = .35
      startVal [time (s)] = 0.0
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    ImageComponent B3
      image [set every repeat] = $B_Know
      pos [set every repeat] = (-.12, .1)
      saveStartStop = False
      size [set every repeat] = .35
      startVal [time (s)] = 0.0
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    ImageComponent C3
      image [set every repeat] = $C_Know
      pos [set every repeat] = (.12, .1)
      saveStartStop = False
      size [set every repeat] = .35
      startVal [time (s)] = 0.0
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    ImageComponent D3
      image [set every repeat] = $D_Know
      pos [set every repeat] = (.36, .1)
      saveStartStop = False
      size [set every repeat] = .35
      startVal [time (s)] = 0.0
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    KeyboardComponent Knowledge_Resp
      allowedKeys [set every repeat] = '7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent AddBlock
      Code Type = Py
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      Begin Routine:
        if (CurrentKnow == 'A_Card') :
            KnowCoords = (-.36, -.12)
            ArrowCoords = (-.36, -.02)
        elif (CurrentKnow == 'B_Card') :
            KnowCoords = (-.12, -.12)
            ArrowCoords = (-.12, -.02)
        elif (CurrentKnow == 'C_Card') :
            KnowCoords = (.12, -.12)
            ArrowCoords = (.12, -.02)
        elif (CurrentKnow == 'D_Card') :
            KnowCoords = (.36, -.12)
            ArrowCoords = (.36, -.02)
      Each Frame:
        if (CurrentKnow == 'A_Card') :
            Card = 'A'
        elif (CurrentKnow == 'B_Card') :
            Card = 'B'
        elif (CurrentKnow == 'C_Card') :
            Card = 'C'
        elif (CurrentKnow == 'D_Card') :
            Card = 'D'
      End Routine:
        KnowledgeCounter = KnowledgeCounter + 1

        if (Block == 6):
            KnowInstrct2_Rep = 0
    TextComponent Knowledge_text
      letterHeight = 0.035
      pos [set every repeat] = $KnowCoords
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
             Good (7)?
              Bad (8)?
        Don't Know Yet (9)?
    ImageComponent arrow3
      image [set every repeat] = arrow.png
      pos [set every repeat] = $ArrowCoords
      saveStartStop = False
      size = .04
      startVal [time (s)] = 0.0
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  Routine UpdateBlock
    CodeComponent UpdateBlockCode
      Code Type = Py
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      Begin Routine:
        Block = Block + 1

        CardCounter = 0

        A_Counter = 0
        A_moneyCounter = 0
        B_Counter = 0
        B_moneyCounter = 0
        C_Counter = 0
        C_moneyCounter = 0
        D_Counter = 0
        D_moneyCounter = 0
  Routine UpdateBlock2
    CodeComponent UpdateBlockCode_2
      Code Type = Py
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      Begin Routine:
        Block = Block + 1
        KnowledgeCounter = 0
  Routine Instructions1
    CodeComponent JSCodeStart
      Code Type = JS
      disabled = True
      Before JS Experiment:
        import PsychoPolyFill from './PsychoPolyfill.js';
      Begin JS Experiment:
        PsychoPolyFill(expInfo.psychopyVersion, psychoJS, util);
    TextComponent Instruct1_text
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In front of you on the screen, there will be 4 decks of cards: 1, 2, 3, and 4. When we begin the game, I want you to select one card at a time by clicking on a card from any deck you choose.

        Each time you select a card, the computer will tell you that you won some money. I don't know how much money you will win. You will find out as we go along.

        Every so often, when you click on a card, the computer will tell you that you lost some money. I don't know when you will lose or how much. You will find out as we go along.

        Press spacebar to continue.
    KeyboardComponent Instruct1_Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent MoneyList_code
      Code Type = Auto->JS
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      Begin Experiment:
        Block = 0
        CardChoice = 0
        CardChoice_code = 0
        GoodDeck = 3
        CardAcc = 3
        CardCounter = 0
        KnowledgeCounter = 0
        CardList = [0]
        MoneyList = [0]
        KnowList = [0]
        CurrentKnow = 0

        A_Counter = 0
        A_moneyCounter = 0
        B_Counter = 0
        B_moneyCounter = 0
        C_Counter = 0
        C_moneyCounter = 0
        D_Counter = 0
        D_moneyCounter = 0
        MoneyCounter = 0

        Bank = 2000

        ChoiceStartTime = 0
        ChoiceTimePassed = 0
        ChoiceTimedOut = 0

        FeedbackCoords = 0
        MsgColor = 'black'
        PlusMinus = ' '
        Msg = ' '

        KnowInstrct2_Rep = 1

        imgA = 'card_choice.png'
        imgB = 'card_choice.png'
        imgC = 'card_choice.png'
        imgD = 'card_choice.png'
      End Routine:
        Block = 1
  Routine Instructions2
    TextComponent Instruct2_text
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You are absolutely free to switch from one deck to the other at any time, and as often as you wish.

        The goal of the game is to win as much money as possible and avoid losing as much money as possible. You won't know when the game will end. Simply keep on playing until the computer stops. I am going to give you 2000 credit, There is a reminder of how much money you have before we see whether you won or lost.

        Press spacebar to continue.
    KeyboardComponent Instruct2_Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instructions3
    ImageComponent A0
      image = card_choice.png
      pos = (-.36, .1)
      saveStartStop = False
      size = .3
      startVal [time (s)] = 0.0
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    ImageComponent B0
      image = card_choice.png
      pos = (-.12, .1)
      saveStartStop = False
      size = .3
      startVal [time (s)] = 0.0
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    ImageComponent C0
      image = card_choice.png
      pos = (.12, .1)
      saveStartStop = False
      size = .3
      startVal [time (s)] = 0.0
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    ImageComponent D0
      image = card_choice.png
      pos = (.36, .1)
      saveStartStop = False
      size = .3
      startVal [time (s)] = 0.0
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    KeyboardComponent Instruct3_Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent Instruct3_text
      color = black
      letterHeight = 0.04
      pos = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is what the screen will look like.

        You can choose a card by selecting either 1, 2, 3 or 4 on the keyboard

        Press spacebar to begin.
  Routine Bank
    TextComponent Banktext
      color = black
      letterHeight = 0.04
      pos = (0, .1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = $'Your Current Total:  €' + str(Bank)
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    TextComponent Initializing_text
      color = black
      letterHeight = 0.04
      pos = (0, -.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Intializing...
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  Routine KnowInstruct_1
    TextComponent know_text1_2
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now we will take a short break so you can tell me what you know about the decks of cards.

        The computer will show you each deck with an arrow below it.  Press the GOOD button if you tend to win money when you play cards on that deck.  Press the BAD button, if you think that you tend to lose money with that deck.   If you aren't sure yet, press the DON'T KNOW button.

        Press SPACE BAR to continue.
    KeyboardComponent know_resp1_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine KnowInstruct_2
    TextComponent KnowInstruct_2_text_2
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now you will continue with the game.

        Nothing has changed.  The good decks are still good, and the bad decks are still bad.  Don't worry if you haven't figured it out yet.  You'll get more of a chance to figure it out now.  Remember, if you win a lot of money, it will count towards your bonus at the end of testing.

        Press SPACE BAR to start again.
    KeyboardComponent KnowInstruct_resp2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine VersionBlock
    CodeComponent CardList_code
      Code Type = Py
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  Routine SetKnowledge
    CodeComponent code
      Code Type = Py
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      Begin Routine:
        KnowList = ['A_Card', 'B_Card', 'C_Card', 'D_Card']
        CurrentKnow = KnowList[(KnowledgeCounter)]
      End Routine:
        if (CurrentKnow == 'A_Card') :
            A_Know = 'A_choice.png'
            B_Know = 'B_un.png'
            C_Know = 'C_un.png'
            D_Know = 'D_un.png'
        elif (CurrentKnow == 'B_Card') :
            A_Know = 'A_un.png'
            B_Know = 'B_choice.png'
            C_Know = 'C_un.png'
            D_Know = 'D_un.png'
        elif (CurrentKnow == 'C_Card') :
            A_Know = 'A_un.png'
            B_Know = 'B_un.png'
            C_Know = 'C_choice.png'
            D_Know = 'D_un.png'
        elif (CurrentKnow == 'D_Card') :
            A_Know = 'A_un.png'
            B_Know = 'B_un.png'
            C_Know = 'C_un.png'
            D_Know = 'D_choice.png'
  Routine instructions4
    TextComponent text_instr
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        The only hint I can give you, and the most important thing to note is this: Out of these four decks of cards, there are some that are worse than others, and to win you should try to stay away from bad decks.

        No matter how much you find yourself losing, you can still win the game if you avoid the worst decks.

        Also, note that the computer does not change the order of the cards once the game begins. It does not make you lose at random, or make you lose money based on the last card you picked.

        If you have any questions, please ask the researcher and return later.

        Otherwise, click the spacebar to begin.
    KeyboardComponent instruct4_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions1
  Routine Instructions2
  Routine Instructions3
  Routine instructions4
  Routine Bank
  LoopInitiator ChoiceBlock loopType="TrialHandler"
    conditionsFile = GainLosConds.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'A_Outcome': 100, 'B_Outcome': 100, 'C_Outcome': 50, 'D_Outcome': 50},
      {'A_Outcome': 100, 'B_Outcome': 100, 'C_Outcome': 50, 'D_Outcome': 50},
      {'A_Outcome': -150, 'B_Outcome': 100, 'C_Outcome': -50, 'D_Outcome': 50},
      {'A_Outcome': 100, 'B_Outcome': 100, 'C_Outcome': 50, 'D_Outcome': 50},
      {'A_Outcome': -300, 'B_Outcome': 100, 'C_Outcome': -50, 'D_Outcome': 50},
      {'A_Outcome': 100, 'B_Outcome': 100, 'C_Outcome': 50, 'D_Outcome': 50},
      {'A_Outcome': -200, 'B_Outcome': 100, 'C_Outcome': -50, 'D_Outcome': 50},
      {'A_Outcome': 100, 'B_Outcome': 100, 'C_Outcome': 50, 'D_Outcome': 50},
      {'A_Outcome': -250, 'B_Outcome': -1250, 'C_Outcome': -50, 'D_Outcome': 50},
      {'A_Outcome': -350, 'B_Outcome': 100, 'C_Outcome': -50, 'D_Outcome': -250},
      {'A_Outcome': 100, 'B_Outcome': 100, 'C_Outcome': 50, 'D_Outcome': 50},
      {'A_Outcome': -350, 'B_Outcome': 100, 'C_Outcome': -25, 'D_Outcome': 50},
      {'A_Outcome': 100, 'B_Outcome': 100, 'C_Outcome': -75, 'D_Outcome': 50},
      {'A_Outcome': -250, 'B_Outcome': -1250, 'C_Outcome': 50, 'D_Outcome': 50},
      {'A_Outcome': -200, 'B_Outcome': 100, 'C_Outcome': -25, 'D_Outcome': 50},
      {'A_Outcome': 100, 'B_Outcome': 100, 'C_Outcome': 50, 'D_Outcome': 50},
      {'A_Outcome': -300, 'B_Outcome': 100, 'C_Outcome': -25, 'D_Outcome': 50},
      {'A_Outcome': -150, 'B_Outcome': 100, 'C_Outcome': -75, 'D_Outcome': 50},
      {'A_Outcome': 100, 'B_Outcome': 100, 'C_Outcome': 50, 'D_Outcome': 50},
      {'A_Outcome': 100, 'B_Outcome': 100, 'C_Outcome': -50, 'D_Outcome': -250},
      {'A_Outcome': 100, 'B_Outcome': 100, 'C_Outcome': 50, 'D_Outcome': 50}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
    Routine Choice
    Routine ProcessChoice
    Routine SetMoney
    Routine Feedback
  LoopTerminator ChoiceBlock
  Routine End
